<CompuCell3D Revision="6" Version="4.4.1">
    <Metadata>
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
    </Metadata>
    <Potts>
        <Dimensions x="400" y="400" z="1"></Dimensions>
        <Steps>100000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>2</NeighborOrder>
    </Potts>
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"></CellType>
        <CellType TypeId="1" TypeName="Cell"></CellType>
        <CellType TypeName="CellA" TypeId="2"></CellType>
        <CellType TypeName="CellE" TypeId="3"></CellType>
    </Plugin>
    <Plugin Name="CenterOfMass">
   </Plugin>
    <Plugin Name="Volume">
        </Plugin>
    <Plugin Name="NeighborTracker">
   </Plugin>
    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Cell">10.0</Energy>
        <Energy Type1="Cell" Type2="Cell">5.0</Energy>
        <NeighborOrder>4</NeighborOrder>
        <Energy Type1="CellA" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA">10.0</Energy>
        <Energy Type1="CellE" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellE">10.0</Energy>
        <Energy Type1="CellA" Type2="CellE">10.0</Energy>
        <Energy Type1="CellE" Type2="CellE">10.0</Energy>
    </Plugin>
    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="345" y="110" z="0"></BoxMin>
            <BoxMax x="365" y="130" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
        <Region>
            <BoxMin x="230" y="52" z="0"></BoxMin>
            <BoxMax x="251" y="73" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellA</Types>
        </Region>
        <Region>
            <BoxMin x="174" y="116" z="0"></BoxMin>
            <BoxMax x="187" y="129" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellE</Types>
        </Region>
    </Steppable>
    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="Oxygen">
            <DiffusionData>
                <FieldName>Oxygen</FieldName>
            </DiffusionData>
        </DiffusionField>
    </Steppable>
</CompuCell3D>
